PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 810]
  expName = priming_exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'piano'},
      {'study_word': 'cushion'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = study_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_ i _n'},
      {'test': 'c_c_n_t'},
      {'test': 'p_r_m_d'},
      {'test': 'p_a_o'},
      {'test': 'f_b_i_'},
      {'test': 't_b_e'},
      {'test': '_a_d_l'}]
    Routine test
  LoopTerminator trials_2
