PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotional_stroop
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Trail
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'y','r','g','b'
      correctAns = $cor_res
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your particpation. Below are the instructions for the task you are going to perform, please read them carefully.

        A word will appear on your screen, you need to focus on the colour of the word while ignoring its meaning and respond which coulour are you seeing. Please, respond as quickly but carefully. To record your response you need to press the following keys signifying each colour: 'y' for yellow, 'r' for red, 'g' for green, and 'b' blue.

        To continue to the experiment please press "space" bar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for your participation
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'Street', 'colour': 'yellow', 'condition': 'C', 'cor_res': 'y'},
      {'word': 'Guilt', 'colour': 'red', 'condition': 'I', 'cor_res': 'r'},
      {'word': 'Chalk', 'colour': 'green', 'condition': 'C', 'cor_res': 'g'},
      {'word': 'School', 'colour': 'blue', 'condition': 'C', 'cor_res': 'b'},
      {'word': 'Sadness', 'colour': 'yellow', 'condition': 'I', 'cor_res': 'y'},
      {'word': 'Box', 'colour': 'red', 'condition': 'C', 'cor_res': 'r'},
      {'word': 'Anxious', 'colour': 'green', 'condition': 'I', 'cor_res': 'g'},
      {'word': 'Chair', 'colour': 'blue', 'condition': 'C', 'cor_res': 'b'},
      {'word': 'Terror', 'colour': 'yellow', 'condition': 'I', 'cor_res': 'y'},
      {'word': 'Wall', 'colour': 'red', 'condition': 'C', 'cor_res': 'r'},
      {'word': 'Death', 'colour': 'green', 'condition': 'I', 'cor_res': 'g'},
      {'word': 'Book', 'colour': 'blue', 'condition': 'C', 'cor_res': 'b'},
      {'word': 'Failure', 'colour': 'yellow', 'condition': 'I', 'cor_res': 'y'},
      {'word': 'Clock', 'colour': 'red', 'condition': 'C', 'cor_res': 'r'},
      {'word': 'Pen', 'colour': 'green', 'condition': 'C', 'cor_res': 'g'},
      {'word': 'Pain', 'colour': 'blue', 'condition': 'I', 'cor_res': 'b'},
      {'word': 'Chalk', 'colour': 'yellow', 'condition': 'C', 'cor_res': 'y'},
      {'word': 'Lonely', 'colour': 'red', 'condition': 'I', 'cor_res': 'r'},
      {'word': 'Murder', 'colour': 'green', 'condition': 'I', 'cor_res': 'g'},
      {'word': 'Dear', 'colour': 'blue', 'condition': 'C', 'cor_res': 'b'},
      {'word': 'Despair', 'colour': 'yellow', 'condition': 'I', 'cor_res': 'y'}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
    Routine Trail
  LoopTerminator trials
  Routine Thank_you
